// Example parameter file for B-spline registration

// The internal pixel type, used for internal computations
// Leave to float in general.
// NB: this is not the type of the input images! The pixel
// type of the input images is automatically read from the
// images themselves.
(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")

// The dimensions of the fixed and moving image
//(FixedImageDimension 3)
//(MovingImageDimension 3)

// Registration setup
(Registration "MultiMetricMultiResolutionRegistration")
(NumberOfResolutions 5) // was 3

// Optimizer
(Optimizer "AdaptiveStochasticGradientDescent")
//(Optimizer "StandardGradientDescent")
//(ASGDParameterEstimationMethod "DisplacementDistribution")
//(MaximumNumberOfIterations 10 10 10 10 10)
(MaximumNumberOfIterations 700 500 500 100 100)

// Transformation
(Transform "AffineTransform")
// The control point spacing of the bspline transformation in
// the finest resolution level. 
(FinalGridSpacingInPhysicalUnits 0.5 0.5 0.5)

// Metric
(Metric "AdvancedNormalizedCorrelation")
//(SubtractMean "true")
//(Metric "AdvancedNormalizedCorrelation" "AdvancedMattesMutualInformation")
// You can change the following values
(NumberOfHistogramBins 32)

// Sampler
// Number of spatial samples used to compute the metric
// (and its derivative) in each iteration.
//(NumberOfSpatialSamples 2048) // for testing
(NumberOfSpatialSamples 20000) //5000

(NewSamplesEveryIteration "true")
(SP_alpha 0.6)
(SP_A 50.0)
(SP_a 1000.0 1000.0 1000.0 1000.0 1000.0)

// Refresh these spatial samples in every iteration, and select
// them randomly. 
(NewSamplesEveryIteration "true")
//(ImageSampler "RandomCoordinate")
(ImageSampler "RandomSparseMask") 
(SampleRegionSize 51.0 51.0 79.0)
(UseRandomSampleRegion "true")
//(AutomaticTransformInitialization "true")
//(AutomaticTransformInitializationMethod "GeometricalCenter")


// Order of B-Spline interpolation used during registration/optimisation.
(BSplineInterpolationOrder 3 3 3)

// Order of B-Spline interpolation used for applying the final
// deformation.
(FinalBSplineInterpolationOrder 3) 

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue -3000)


// Choose whether to generate the deformed moving image.
(WriteResultImage "true")

// The pixel type and format of the resulting deformed moving image
(ResultImagePixelType "short")
(ResultImageFormat "mhd")


// Some settings to avoid warnings
//(Metric0Weight 0.5)
//(Metric1Weight 0.5)
(HowToCombineTransforms "Compose")
(UseDirectionCosines "true")
(AutomaticScalesEstimation "true")
(ErodeMask "true")
//(BSplineTransformSplineOrder 3) //also found in documentation but was already here
(UseCyclicTransform "false")
(ShowExactMetricValue "true")
(CheckNumberOfSamples "true")
//(FixedImageBSplineInterpolationOrder 1)
//(UseRandomSampleRegion "false")
(MinimumGradientMagnitude 1e-08)
(RelaxationFactor 0.5)
(FixedImagePyramid "FixedSmoothingImagePyramid")
(FixedImagePyramidSchedule 32 32 32 8 8 8 2 2 2 1 1 1)
(MovingImagePyramid "MovingSmoothingImagePyramid")
(MovingImagePyramidSchedule 32 32 32 8 8 8 2 2 2 1 1 1)
//(FixedImagePyramid "FixedRecursiveImagePyramid")
//(MovingImagePyramid "MovingRecursiveImagePyramid")
// The step size of the optimizer, in mm. 
(MaximumStepLength 5.0)
(MinimumStepLength 0.0001) 
(Interpolator "LinearInterpolator")
(ResampleInterpolator "FinalNearestNeighborInterpolator" "FinalNearestNeighborInterpolator")
(Resampler "DefaultResampler")
