// Description: elastixpaper, affine

//ImageTypes
(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")


//Registration setup
(Registration "MultiResolutionRegistration")
(NumberOfResolutions 4)
// Pyramids
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")


// Optimizer
(Optimizer "StandardGradientDescent")
//Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 200 200 200 200)

// Interpolator
(Interpolator "BSplineInterpolator")
(BSplineInterpolationOrder 1)
// Order of B-Spline interpolation used for applying the final
// deformation.
(FinalBSplineInterpolationOrder 3)

// Evaluation Metric
(Metric "AdvancedMattesMutualInformation")

//resampler
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "AffineTransform")

(ErodeMask "false")
(AutomaticScalesEstimation "true")
(AutomaticTransformInitialization "false")


(HowToCombineTransforms "Compose")

(WriteResultImage "false")
//(WriteResultImageAfterEachResolution "false") 
(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "true")


//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32 )
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)

// sampler:
(ImageSampler "RandomCoordinate")
(FixedImageBSplineInterpolationOrder 1 )
(UseRandomSampleRegion "true")
(SampleRegionSize 50.0)
(CheckNumberOfSamples "false")
(NewSamplesEveryIteration "true" )

//Number of spatial samples used to compute the mutual information in each resolution level:
(NumberOfSpatialSamples 2000000 )


//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue -3000)

//SP: Param_a in each resolution level. a_k = a/(A+k+1)^alpha
(SP_a 2000.0)

//SP: Param_A in each resolution level. a_k = a/(A+k+1)^alpha
(SP_A 200.0)

//SP: Param_alpha in each resolution level. a_k = a/(A+k+1)^alpha
(SP_alpha 0.6 ) 